PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Enable Escape = False
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = norm
  Window size (pixels) = [1152, 720]
  color = #d3d3d3
  colorSpace = hex
  expName = testing1
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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  Routine intro
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    TextboxComponent intro_text
      alignment = center-left
      bold = False
      color = '#000000'
      editable = False
      font = Times New Roman
      letterHeight = 0.1
      size = (1.85, 0.5)
      startVal [time (s)] = 0.0
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      text:
        Welcome to this research study on educational video content.

        (This study will take approximately 30 minutes to complete.)

        Your responses will be kept confidential and used for research
        purposes only. No personally identifying information will be shared
        in any publication resulting from this research.

        By continuing, you confirm that you agree to participate in this study.

        Press 'SPACE'  to continue.
    KeyboardComponent introresp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine warning
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    TextboxComponent warning_header
      bold = False
      color = '#000000'
      editable = False
      font = Times New Roman
      letterHeight = 0.15
      pos = (0, 0.65)
      size = (1.85, 0.5)
      startVal [time (s)] = 0.0
      text = IMPORTANT
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    TextboxComponent warning_text
      alignment = center-left
      bold = False
      color = '#000000'
      editable = False
      font = Times New Roman
      letterHeight = 0.1
      pos = (0, -0.15)
      size = (1.85, 0.5)
      startVal [time (s)] = 0.0
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      text:
        - You will watch one video in full.
        - Please pay close attention, as you will be tested on the content
          afterward.
        - The video and quiz cannot be repeated once completed.
    KeyboardComponent warning_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ButtonComponent nextButton_warning
      bold = True
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      font = Times New Roman
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.8, -0.75)
      size = (0.15, 0.15)
      startVal [time (s)] = 0
      text = Next>>
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    CodeComponent code_2
      Code Type = Auto->JS
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      Each Frame:
        # Ctrl + Q to quit
        keys = event.getKeys(modifiers=True)

        for key, modifiers in keys:
            if key.lower() == 'q' and modifiers.get('ctrl', False):
                core.quit()
  Routine video
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    CodeComponent code_3
      Code Type = Auto->JS
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      Each Frame:
        # Ctrl + Q to quit
        keys = event.getKeys(modifiers=True)

        for key, modifiers in keys:
            if key.lower() == 'q' and modifiers.get('ctrl', False):
                core.quit()
    MovieComponent movie
      backend = ffpyplayer
      forceEndRoutine = False
      movie [set every repeat] = $video_to_play
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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  Routine quiz
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    CodeComponent code_5
      Code Type = Auto->JS
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      Each Frame:
        # Ctrl + Q to quit
        keys = event.getKeys(modifiers=True)

        for key, modifiers in keys:
            if key.lower() == 'q' and modifiers.get('ctrl', False):
                core.quit()
  Routine likert
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    TextComponent likertText
      color = '#000000'
      font = Times New Roman
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $itemText
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    SliderComponent likert_slider
      color = '#000000'
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = ('Strongly disagree', 'Disagree', 'Somewhat disagree', 'Neither agree nor disagree', 'Somewhat agree', 'Agree', 'Strongly agree')
      letterHeight = 0.036
      pos = (0, -0.4)
      size = (1.5, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    ButtonComponent nextButton
      bold = True
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      font = Times New Roman
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.8, -0.75)
      size = (0.15, 0.15)
      startVal [time (s)] = 0
      text = Next>>
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    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Experiment:
        # Ctrl + Q to quit
        keys = event.getKeys(modifiers=True)

        for key, modifiers in keys:
            if key.lower() == 'q' and modifiers.get('ctrl', False):
                core.quit()
  Routine quizending
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    TextboxComponent textbox_2
      alignment = center-left
      bold = False
      color = '#000000'
      editable = False
      font = Times New Roman
      letterHeight = 0.1
      size = (1.85, 0.5)
      startVal [time (s)] = 0.0
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      text:
        You have completed the quiz.

        Just a few more short questions about your experience, and then
        you'll be finished.
    KeyboardComponent key_resp_quizending
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ButtonComponent nextButton_2
      bold = True
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      font = Times New Roman
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.8, -0.75)
      size = (0.15, 0.15)
      startVal [time (s)] = 0
      text = Next>>
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    CodeComponent code_6
      Code Type = Auto->JS
  Routine end
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    TextboxComponent ending_text
      bold = False
      color = '#000000'
      editable = False
      font = Times New Roman
      letterHeight = 0.1
      size = (1.8, 0.5)
      startVal [time (s)] = 0.0
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      text:
        Thank you for participating in this study!

        Your responses have been recorded successfully.
    CodeComponent code_8
      Code Type = Auto->JS
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      Each Frame:
        # Ctrl + Q to quit
        keys = event.getKeys(modifiers=True)

        for key, modifiers in keys:
            if key.lower() == 'q' and modifiers.get('ctrl', False):
                core.quit()
  Routine quizinstruction
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    TextboxComponent textbox
      alignment = center-left
      bold = False
      color = '#000000'
      editable = False
      font = Times New Roman
      letterHeight = 0.1
      size = (1.85, 0.5)
      startVal [time (s)] = 0.0
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      text:
        Thank you for watching the video.

        You will now answer some questions about what you just watched.

        Please answer based on your own understanding.

        Before the main questions, you will first complete a short sample
        quiz to help you get familiar with how the questions work.
    KeyboardComponent quz_instruction_text
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ButtonComponent nextButton_quizInstruction
      bold = True
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      font = Times New Roman
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.8, -0.75)
      size = (0.15, 0.15)
      startVal [time (s)] = 0
      text = Next>>
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    CodeComponent code_4
      Code Type = Auto->JS
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      Each Frame:
        # Ctrl + Q to quit
        keys = event.getKeys(modifiers=True)

        for key, modifiers in keys:
            if key.lower() == 'q' and modifiers.get('ctrl', False):
                core.quit()
  Routine instructions
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    TextboxComponent instruction_header
      bold = True
      color = '#000000'
      editable = False
      font = Times New Roman
      letterHeight = 0.15
      pos = (0, 0.65)
      size = (1.85, 0.5)
      startVal [time (s)] = 0.0
      text = Instructions
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    TextboxComponent instruction_text
      alignment = center-left
      bold = False
      color = '#000000'
      editable = False
      font = Times New Roman
      letterHeight = 0.1
      overflow = hidden
      pos = (0, -0.05)
      size = (1.85, 0.5)
      startVal [time (s)] = 0.0
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      text:
        In this study, you will:

        1. Watch a short educational video
        2. Answer a series of questions about what you watched
        3. Answer a few questions about your experience
        4. Fill in a short form about your age, gender, and education.
    KeyboardComponent instruct_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ButtonComponent nextButton_instructions
      bold = True
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      font = Times New Roman
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.8, -0.75)
      size = (0.15, 0.15)
      startVal [time (s)] = 0
      text = Next>>
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    CodeComponent code
      Code Type = Auto->JS
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      Each Frame:
        # Ctrl + Q to quit
        keys = event.getKeys(modifiers=True)

        for key, modifiers in keys:
            if key.lower() == 'q' and modifiers.get('ctrl', False):
                core.quit()
  Routine consent
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    TextboxComponent consentText
      alignment = top-left
      bold = False
      borderWidth = 0
      color = '#000000'
      editable = False
      font = Times New Roman
      letterHeight = 0.03
      overflow = scroll
      padding = 0.02
      size = (1.5, 0.75)
      startVal [time (s)] = 0.0
      units = height
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      text:
        PARTICIPANT INFORMATION AND CONSENT

        Who Can Take Part
        - You must be 18 years or older.
        - You must not have a vision or hearing impairment that would affect your participation.
        - You must be able to follow a lecture in English
        - You must not have been enrolled one of the competencies listed here:
           - AIC - 505 Generative AI
           - SEN - 210 DesktopGUI
           - TBC

        How Long It Takes
        - The whole session takes about 30 to 45 minutes.
        - Please follow the instructions on the screen.

        Your Rights
        - Taking part is voluntary.
        - You can stop and leave at any time. You do not have to give a reason.
        - If you leave, your data will not be stored or used.

        Privacy
        - Your name will not be written in your data. You will only have a participant number.
        - Your data will be stored securely.
        - Results will only be reported for the whole group. No one will be identified.

        CONSENT
        - I have read this information.
        - I understand that I can stop at any time.
        - I agree to take part in this study.

        You can ask the experimenter any question before you start.

        If you agree, please continue to the next step by clicking the "NEXT" button.
    CodeComponent codeScroll
      Code Type = Auto->JS
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      Each Frame:
        # Fix TextBox size
        consentText.container.size = consentText.size * (1.1, 1)
        consentText.scrollbar.size[1] = consentText.size[1]

        # Mouse-wheel scrolling
        wheel = mouse.getWheelRel()[1]

        if wheel != 0:
            consentText.scrollbar.markerPos += wheel * 0.1

        # Ctrl + Q to quit
        keys = event.getKeys(modifiers=True)

        for key, modifiers in keys:
            if key.lower() == 'q' and modifiers.get('ctrl', False):
                core.quit()
    MouseComponent mouse
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    ButtonComponent consentNextButton
      bold = True
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      font = Times New Roman
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.8, -0.75)
      size = (0.15, 0.15)
      startVal [time (s)] = 0
      text = Next>>
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  Routine sampleQuiz
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  Routine demographic
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    ButtonComponent demoNext
      bold = True
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      font = Times New Roman
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.8, -0.75)
      size = (0.15, 0.15)
      startVal [time (s)] = 0
      text = Next>>
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    FormComponent form
      Data Format = rows
      Font = Noto Sans
      Item Padding = 0.1
      Items = demoForm.xlsx
      Randomize = False
      Style = custom...
      Text Height = 0.03
      borderColor = 0.6549, 0.6549, 0.6549
      fillColor = 0.6549, 0.6549, 0.6549
      itemColor = -1.0000, -1.0000, -1.0000
      markerColor = 1.0000, -1.0000, -1.0000
      responseColor = -1.0000, -1.0000, -1.0000
      size = (1.6, 0.7)
      startVal [time (s)] = 0.0
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    CodeComponent code_9
      Code Type = Auto->JS
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      Each Frame:
        # Ctrl + Q to quit
        keys = event.getKeys(modifiers=True)

        for key, modifiers in keys:
            if key.lower() == 'q' and modifiers.get('ctrl', False):
                core.quit()
  Routine videoAssignment
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    CodeComponent code_10
      Code Type = Auto->JS
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      Begin Experiment:
        import csv
        import random

        # -------------------------------------------------
        # SETTINGS
        # -------------------------------------------------

        video_files = [
            "3_with_jump.mp4",
            "Sigmachinesecat.mp4",
            "Possessed_cat.mp4",
            "Jack_jet.mp4",
            "Creepy and scary cat.mp4",
            "cattransition.mp4"
        ]

        MAX_PER_VIDEO = 6

        # File used to keep track of assignments
        assignment_file = os.path.join(
            _thisDir,
            "video_assignment.csv"
        )

        # -------------------------------------------------
        # CREATE ASSIGNMENT FILE IF IT DOES NOT EXIST
        # -------------------------------------------------

        if not os.path.exists(assignment_file):

            with open(assignment_file, "w", newline="") as f:
                writer = csv.writer(f)
                writer.writerow(["participant", "video"])


        # -------------------------------------------------
        # READ PREVIOUS ASSIGNMENTS
        # -------------------------------------------------

        video_counts = {video: 0 for video in video_files}

        with open(assignment_file, "r", newline="") as f:

            reader = csv.DictReader(f)

            for row in reader:

                video = row["video"]

                if video in video_counts:
                    video_counts[video] += 1


        # -------------------------------------------------
        # FIND VIDEOS THAT STILL HAVE SPACE
        # -------------------------------------------------

        available_videos = [
            video
            for video in video_files
            if video_counts[video] < MAX_PER_VIDEO
        ]


        # -------------------------------------------------
        # RANDOMLY SELECT ONE AVAILABLE VIDEO
        # -------------------------------------------------

        if len(available_videos) == 0:

            raise Exception(
                "All videos have already been assigned "
                "to 6 participants each."
            )

        selected_video = random.choice(available_videos)


        # -------------------------------------------------
        # SAVE THE ASSIGNMENT
        # -------------------------------------------------

        participant_id = expInfo["participant"]

        with open(assignment_file, "a", newline="") as f:

            writer = csv.writer(f)

            writer.writerow([
                participant_id,
                selected_video
            ])


        # -------------------------------------------------
        # VARIABLE USED BY MOVIE COMPONENT
        # -------------------------------------------------

        video_to_play = selected_video
        thisExp.addData("assigned_video", video_to_play)
    CodeComponent ctrlQ
      Code Type = Auto->JS
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      Each Frame:
        # Ctrl + Q to quit
        keys = event.getKeys(modifiers=True)

        for key, modifiers in keys:
            if key.lower() == 'q' and modifiers.get('ctrl', False):
                core.quit()
Flow
  Routine videoAssignment
  Routine video
  Routine consent
  Routine instructions
  Routine warning
  Routine quizinstruction
  Routine sampleQuiz
  Routine quiz
  Routine quizending
  LoopInitiator likertLoop loopType="TrialHandler"
    conditionsFile = likert_items.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'itemText': 'The video held my attention throughout.'},
      {'itemText': 'The speaker was easy to understand.'},
      {'itemText': 'I found the content engaging.'},
      {'itemText': 'I would want to watch more videos like this.'},
      {'itemText': 'The pacing of the video felt appropriate.'}]
    Routine likert
  LoopTerminator likertLoop
  Routine demographic
  Routine end
